PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
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Routines
  Routine training_trial_chord_playing
    SoundComponent sound_1
      sound = ./assets/music/AAB/0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Welcome

        Hi~
  Routine training_trial_answer
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Press <space> if the chord is the target chord.
        Neglect it if it is not.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine training_trial_chord_playing
    Routine training_trial_answer
  LoopTerminator trials
